PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'participant': '', 'counterbalance': '', 'session': '', 'stim site': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1792, 1120]
  color = $[-0.067,-0.122,-0.122]
  expName = nBack_exp_v2
  logging level = debug
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Routines
  Routine endStudy
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = The study is over. Thank you!
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  Routine hide_mouse
    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        [your_mouse = event.Mouse(visible = False)]
  Routine Prac_Instructions_nback
    CodeComponent setTrials
      Code Type = Auto->JS
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      Before Experiment:
        exp = []
      Begin Routine:
        # usually we would use a conditions file to specify the number of nBack trials
        # but we want to ensure the position of the first n-Back trial
        # adapts to the requested n. i.e. if this is a 4-back trial
        # we cannot present an n-Back trial in the first 3 trials

        # what is the n (e.g. n = 2 "remember if this item is the same as 2 back")
        n = N_prac
        # how many trials in total?
        totalTrials = 18
        # how many n-Back trials?
        nBackTrials = 6

        # make a list of trials; 0 = not nBack; 1 = nBack trial
        trialList = [0]*(totalTrials-nBackTrials)+[1]*nBackTrials

        # buffer trials = first set of trials where an n-back trial cannot be presented
        bufferTrials = trialList[:n]

        # experimental trials - include nBack trials
        experimentalTrials = trialList[n:]

        # randomise the experimental trials
        shuffle(experimentalTrials)

        # combine the buffer trials and experimental trials to make the final trialList
        trialList = bufferTrials+experimentalTrials
    TextComponent instructionsTxt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $"This is a practice block for the " + str(n) + "-back trials. You will respond with the " +  str(key1) + " key whenever the current letter is the same as the one presented " + str(n) + " trial(s) ago. Otherwise, hit the " + str(key2) + " key. The letters will flash briefly on screen and you may respond even after letter will disappear on the +. Click Space to begin the task."
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine fixation_2
    TextComponent fixation_start
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = +
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  Routine end_2
    TextComponent endMsg
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Break between blocks. The experiment will move on in a couple of seconds. 
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  Routine Experimental_Instructions_nback
    CodeComponent expSetTrials
      Code Type = Auto->JS
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      Begin Routine:
        # usually we would use a conditions file to specify the number of nBack trials
        # but we want to ensure the position of the first n-Back trial
        # adapts to the requested n. i.e. if this is a 4-back trial
        # we cannot present an n-Back trial in the first 3 trials

        # what is the n (e.g. n = 2 "remember if this item is the same as 2 back")
        n = N_trial
        # how many trials in total?
        totalTrials = 18
        # how many n-Back trials?
        nBackTrials = 6
        #how many blocks?
        blocks = 8

        # make a list of trials; 0 = not nBack; 1 = nBack trial
        #trialList = [0]*(totalTrials-nBackTrials)+[1]*nBackTrials

        # buffer trials = first set of trials where an n-back trial cannot be presented
        #bufferTrials = trialList[:n]

        # experimental trials - include nBack trials
        #experimentalTrials = trialList[n:]

        # randomise the experimental trials
        #shuffle(experimentalTrials)

        # combine the buffer trials and experimental trials to make the final trialList
        #trialList = bufferTrials+experimentalTrials

        list1 = [0, 1, 0, 0, 0, 1, 0, 0, 1, 0, 1, 0, 0, 0, 0, 1, 0, 1]
        list2 = [0, 0, 1, 0, 1, 0, 1, 0, 0, 0, 1, 0, 0, 1, 0, 0, 0, 1]
        list3 = [0, 1, 0, 0, 1, 0, 1, 0, 0, 1, 0, 1, 0, 0, 0, 0, 0, 1]
        list4 = [0, 0, 1, 0, 1, 0, 0, 1, 0, 0, 1, 0, 0, 1, 0, 1, 0, 0]
        list5 = [0, 0, 0, 1, 0, 0, 1, 0, 0, 1, 0, 1, 0, 1, 0, 0, 0, 1]
        list6 = [0, 0, 1, 0, 0, 1, 0, 1, 0, 0, 1, 0, 0, 0, 1, 0, 0, 1]
        list7 = [0, 0, 0, 1, 0, 0, 1, 0, 0, 1, 0, 1, 0, 0, 1, 0, 0, 1]
        list8 = [0, 0, 1, 0, 1, 0, 0, 1, 0, 0, 1, 0, 1, 0, 0, 0, 0, 1]


        trialOrder1 = [list1, list2, list3, list4, list5, list6, list7, list8]
        trialOrder2 = [list2, list3, list4, list1, list6, list7, list8, list5]
        trialOrder3 = [list3, list4, list1, list2, list7, list8, list5, list6]
        trialOrder4 = [list4, list1, list2, list3, list8, list5, list6, list7]
        trialOrder5 = [list2, list4, list3, list1, list6, list8, list7, list5]
        trialOrder6 = [list3, list2, list1, list4, list7, list6, list5, list8]


        if expInfo['counterbalance'] == '1':
            sessOrder = trialOrder1
        elif expInfo['counterbalance'] == '2':
            sessOrder = trialOrder2
        elif expInfo['counterbalance'] == '3':
            sessOrder = trialOrder3
        elif expInfo['counterbalance'] == '4':
            sessOrder = trialOrder4
        elif expInfo['counterbalance'] == '5':
            sessOrder = trialOrder5
        elif expInfo['counterbalance'] == '6':
            sessOrder = trialOrder6

        ele = trials_4.thisTrialN
        if ele < blocks:
            trialList = sessOrder[ele]
    TextComponent expInstructions
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      text [set every repeat] = $"This is an experimental block of the  "  + str(n) + "-back task. Press the " + str(key1) + " key if the current letter is the same as " + str(n) + " prior to it (upper or lower case). If it is not, press the " + str(key2) + " key. The letters will flash briefly on screen and you may respond even after the letter disappears during the '+'. Press the 'spacebar' to begin the task."
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial_nback_2
    CodeComponent pickLetter
      Code Type = Auto->JS
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      Begin Experiment:
        from random import choice
        import string
        import numpy as np

        lettersShown = []
        allLetters = ['B', 'C', 'D', 'G', 'P', 'T', 'F', 'N', 'L']
        trialCount = 0
      Begin Routine:
        thisTrialType = trialList[trialCount]
        thisLetter = "0"
        letterSet = allLetters

        if thisTrialType == 0 :# not an n-back trial
            if trialCount > 1:
                availLetters = np.setdiff1d(letterSet,lettersShown[-n::])
                shuffle(availLetters)
                thisLetter = availLetters[-1]
            else:
                availLetters = letterSet
                shuffle(availLetters)
                thisLetter = availLetters[-1]
        elif thisTrialType ==1: # an n-back trial
            thisLetter = lettersShown[-n]

        lettersShown.append(thisLetter)
        trials.addData('trialCount', trialCount)
        trials.addData('itemPresented', thisLetter)
        trials.addData('trialType', thisTrialType)


        #correct trials
        if thisTrialType == 1:
            correct = 'right'
        else:
            correct = 'left'
      End Routine:
        trialCount +=1
        if trialCount >= len(trialList):
            trialCount = 0
    TextComponent letter
      letterHeight = 0.08
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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      text [set every repeat]:
        $thisLetter.join(choice((str.upper, str.lower))(c) for c in thisLetter)
    KeyboardComponent key_resp_2
      allowedKeys = 'left','right'
      correctAns = $correct
      forceEndRoutine = False
      startVal [frame N] = 1
      stopVal [duration (s)] = 2.5
      store = first key
      storeCorrect = True
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    TextComponent text_6
      letterHeight = 0.08
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2
      text = +
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  Routine Prac_Instructions_0back
    CodeComponent setTrials_0back
      Code Type = Auto->JS
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      Before Experiment:
        key1 = []
        key2 = []
      Begin Experiment:
        if expInfo['session'] == '1':
            key1 = 'comma'
            key2 = 'period'
        elif expInfo['session'] == '2':
            key1 = 'period'
            key2 = 'comma'
      Begin Routine:
        # usually we would use a conditions file to specify the number of nBack trials
        # but we want to ensure the position of the first n-Back trial
        # adapts to the requested n. i.e. if this is a 4-back trial
        # we cannot present an n-Back trial in the first 3 trials

        # what is the n (e.g. n = 2 "remember if this item is the same as 2 back")
        n = 0
        # how many trials in total?
        totalTrials = 3
        # how many n-Back trials?
        nBackTrials = 1

        # make a list of trials; 0 = not nBack; 1 = nBack trial
        trialList = [0]*(totalTrials-nBackTrials)+[1]*nBackTrials

        # buffer trials = first set of trials where an n-back trial cannot be presented
        bufferTrials = trialList[:n]

        # experimental trials - include nBack trials
        experimentalTrials = trialList[n:]

        # randomise the experimental trials
        shuffle(experimentalTrials)

        # combine the buffer trials and experimental trials to make the final trialList
        trialList = bufferTrials+experimentalTrials
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = $"This is a practice block for 0 back.  Whenever you see the letter X hit the " + str(key1) + " key. Otherwise, hit the the " + str(key2) + " key. The letters will flash briefly on screen and you may respond even after letter will disappear on the +. Click Space to begin the task."
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial_0back
    CodeComponent pickLetter_0back
      Code Type = Auto->JS
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      Begin Experiment:
        from random import choice
        import string
        import time

        lettersShown = []
        allLetters = ['B', 'C', 'D', 'G', 'P', 'T', 'F', 'N', 'L']
        targetLetter = 'X'
        trialCount = 0
      Begin Routine:
        thisTrialType = trialList[trialCount]
        thisLetter = "0"
        letterSet = allLetters




        if thisTrialType == 0 : # not an n-back trial
            shuffle(letterSet)
            thisLetter = letterSet[-1]
        elif thisTrialType ==1: # an n-back trial
            thisLetter = targetLetter


        lettersShown.append(thisLetter)
        trials.addData('trialCount', trialCount)
        trials.addData('itemPresented', thisLetter)
        trials.addData('trialType', thisTrialType)


        if thisTrialType == 1:
            correct = 'right'
        else:
            correct = 'left'
      End Routine:
        trialCount +=1
        if trialCount >= len(trialList):
            trialCount = 0
    TextComponent fixation
      letterHeight = 0.08
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2
      text = +
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    TextComponent letter_0back
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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      text [set every repeat]:
        $thisLetter.join(choice((str.upper, str.lower))(c) for c in thisLetter)
    KeyboardComponent key_resp_5
      allowedKeys = 'left', 'right'
      correctAns = $correct
      forceEndRoutine = False
      startVal [frame N] = 1
      stopVal [duration (s)] = 2.5
      store = first key
      storeCorrect = True
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  Routine Experiment_Instructions_0back
    CodeComponent code_2
      Code Type = Auto->JS
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      Before Experiment:
        key1 = 'right arrow'
        key2 = 'left arrow'
        sessOrder = []
        trialList = []
        n = 0
      Begin Routine:
        # usually we would use a conditions file to specify the number of nBack trials
        # but we want to ensure the position of the first n-Back trial
        # adapts to the requested n. i.e. if this is a 4-back trial
        # we cannot present an n-Back trial in the first 3 trials

        # what is the n (e.g. n = 2 "remember if this item is the same as 2 back")
        n = 0
        # how many trials in total?
        totalTrials = 18
        # how many n-Back trials?
        nBackTrials = 6
        # how many blocks?
        blocks = 4
        # make a list of trials; 0 = not nBack; 1 = nBack trial
        #trialList = [0]*(totalTrials-nBackTrials)+[1]*nBackTrials

        # buffer trials = first set of trials where an n-back trial cannot be presented
        #bufferTrials = trialList[:n]

        # experimental trials - include nBack trials
        #experimentalTrials = trialList[n:]

        # randomise the experimental trials
        #shuffle(experimentalTrials)

        # combine the buffer trials and experimental trials to make the final trialList
        #trialList = bufferTrials+experimentalTrials
        list1 =[0, 1, 0, 0, 0, 1, 0, 1, 0, 1, 0, 1, 0, 0, 1, 0, 0, 0]
        list2 = [0, 0, 0, 1, 0, 0, 0, 0, 1, 0, 1, 0, 1, 0, 1, 0, 1, 0]
        list3 = [1, 0, 1, 0, 0, 1, 0, 0, 1, 0, 0, 0, 0, 0, 0, 1, 0, 1]
        list4 = [0, 0, 0, 0, 1, 0, 1, 0, 0, 0, 0, 1, 0, 1, 0, 1, 0, 1]

        trialOrder1 = [list1, list2, list3, list4]
        trialOrder2 = [list2, list3, list4, list1]
        trialOrder3 = [list3, list4, list1, list2]
        trialOrder4 = [list4, list1, list2, list3]
        trialOrder5 = [list2, list4, list3, list1]
        trialOrder6 = [list3, list2, list1, list4]

        if expInfo['counterbalance'] == '1':
            sessOrder = trialOrder1
        elif expInfo['counterbalance'] == '2':
            sessOrder = trialOrder2
        elif expInfo['counterbalance'] == '3':
            sessOrder = trialOrder3
        elif expInfo['counterbalance'] == '4':
            sessOrder = trialOrder4
        elif expInfo['counterbalance'] == '5':
            sessOrder = trialOrder5
        elif expInfo['counterbalance'] == '6':
            sessOrder = trialOrder6

        ele = trials_7.thisRepN
        if ele < blocks:
            trialList = sessOrder[ele]
    TextComponent text_3
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      text = $"This is an experimental block for the "  + str(n) + "-back task.  Whenever you see the letter X press the " + str(key1) + " key (upper or lower case). Otherwise, press the the " + str(key2) + " key. The letters will flash briefly on screen and you may respond even after the letter disappears during the '+'. Press the 'spacebar' to begin the task."
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    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine feedback_0back
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        nCorr = int(trials.data['key_resp_5.corr'].sum())
        msg = f"You got {nCorr} trial(s) correct. Press Space to continue."
    TextComponent text_4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $msg
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine feedback_nback
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        nCorr = int(trials.data['key_resp_2.corr'].sum())
        msg = f"You got {nCorr} trial(s) correct. Press Space to continue."
    TextComponent text_5
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg
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    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fixationTrial
    TextComponent fixation_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = +
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    KeyboardComponent key_resp_9
      allowedKeys = 'period','comma'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      store = first key
      storeCorrect = True
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    ParallelOutComponent p_port_3
      address = 0xCFF8
      startData = 255
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = .03
      syncScreen = True
      syncScreenRefresh = False
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    ParallelOutComponent p_port_5
      address = 0xCFF8
      disabled = True
      startData = 255
      startVal [time (s)] = key_resp_9
      stopData = 0
      stopVal [duration (s)] = .04
      syncScreen = True
      syncScreenRefresh = False
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  Routine transitionSlide
    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Experiment:
        trialInstruct = 1
        trialInstruct2 = ''
      Begin Routine:
        if trials_4.thisN == 0:
            continueRoutine = True
            trialInstruct = 1
            trialInstruct2 = '1 trial ago'
        elif trials_4.thisN == 4:
            continueRoutine = True
            trialInstruct = 2
            trialInstruct2 = '2 trials ago'
        else:
            continueRoutine = False
      End Routine:
        trialInstruct = 2
    TextComponent text_7
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      text [set every repeat] = $" The next set of blocks are for the  "+ str(trialInstruct) + "-back task. Remember, this requires you to respond if the current letter is the same as "+ str(trialInstruct2) + ". Press the 'spacebar' to continue."
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    KeyboardComponent key_resp_11
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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  Routine fixation_end
    TextComponent text_8
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine warmUpPulse
    ParallelOutComponent warmUp
      address = 0xCFF8
      startData = 255
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = .4
      syncScreen = True
      syncScreenRefresh = False
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        if trials_7.thisN == 0:
            continueRoutine = True
        else:
            continueRoutine = False
  Routine introSlide
    TextComponent text_9
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      text = The first set of blocks are for the 0-back task. Remember, this requires you to respond if the current trial shows the letter X or not. Press the 'spacebar' to continue.
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    KeyboardComponent key_resp_10
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine introSlide
  LoopInitiator trials_7 loopType="TrialHandler"
    conditionsFile = zeroBackBlocks.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('N_Trial', 0)]),
      OrderedDict([('N_Trial', 0)]),
      OrderedDict([('N_Trial', 0)]),
      OrderedDict([('N_Trial', 0)])]
    Routine Experiment_Instructions_0back
    Routine fixation_2
    LoopInitiator trials loopType="TrialHandler"
      loopType = random
      nReps = totalTrials
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      Routine trial_0back
    LoopTerminator trials
  LoopTerminator trials_7
  LoopInitiator trials_4 loopType="TrialHandler"
    conditionsFile = nBackBlocks.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('N_trial', 1)]),
      OrderedDict([('N_trial', 1)]),
      OrderedDict([('N_trial', 1)]),
      OrderedDict([('N_trial', 1)]),
      OrderedDict([('N_trial', 2)]),
      OrderedDict([('N_trial', 2)]),
      OrderedDict([('N_trial', 2)]),
      OrderedDict([('N_trial', 2)])]
    Routine transitionSlide
    Routine Experimental_Instructions_nback
    Routine fixation_2
    LoopInitiator trials_3 loopType="TrialHandler"
      loopType = random
      nReps = totalTrials
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      Routine trial_nback_2
    LoopTerminator trials_3
  LoopTerminator trials_4
  Routine endStudy
