PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'participant': '', 'counterbalance': '', 'session': '', 'stim site': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1792, 1120]
  color = $[-0.067,-0.122,-0.122]
  expName = nBack_prac
  logging level = debug
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Routines
  Routine endStudy
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Practice is over. Thank you!
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  Routine hide_mouse
    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        [your_mouse = event.Mouse(visible = False)]
  Routine Prac_Instructions_nback
    CodeComponent setTrials
      Code Type = Auto->JS
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      Before Experiment:
        exp = []
      Begin Experiment:
        trialInstruct = ''
      Begin Routine:
        # usually we would use a conditions file to specify the number of nBack trials
        # but we want to ensure the position of the first n-Back trial
        # adapts to the requested n. i.e. if this is a 4-back trial
        # we cannot present an n-Back trial in the first 3 trials

        # what is the n (e.g. n = 2 "remember if this item is the same as 2 back")
        n = N_prac
        # how many trials in total?
        totalTrials = 18
        # how many n-Back trials?
        nBackTrials = 6

        # make a list of trials; 0 = not nBack; 1 = nBack trial
        #trialList = [0]*(totalTrials-nBackTrials)+[1]*nBackTrials

        # buffer trials = first set of trials where an n-back trial cannot be presented
        #bufferTrials = trialList[:n]

        # experimental trials - include nBack trials
        #experimentalTrials = trialList[n:]

        # randomise the experimental trials
        #shuffle(experimentalTrials)

        # combine the buffer trials and experimental trials to make the final trialList
        #trialList = bufferTrials+experimentalTrials


        if n == 1:
            trialInstruct = '1 trial ago'
            if expInfo['counterbalance'] == '1':
                trialList = [0, 0, 0, 1, 0, 0, 0, 1, 0, 1, 0, 0, 1, 0, 1, 0, 1, 0]
            elif expInfo['counterbalance'] == '2':
                trialList = [0,0, 1, 0, 0, 1, 0, 0, 0, 1, 0, 0, 1, 0, 0, 1, 0, 1]
            elif expInfo['counterbalance'] == '3':
                trialList = [0,0, 1, 0, 0, 1, 0, 1, 0, 1, 0, 1, 0, 0, 0, 0, 0, 1]
        elif n == 2:
            trialInstruct = '2 trials ago'
            if expInfo['counterbalance'] == '1':
                trialList = [0, 0, 1, 0, 0, 0, 0, 1, 0, 1, 0, 0, 1, 0, 1, 0, 1, 0]
            elif expInfo['counterbalance'] == '2':
                trialList = [1, 0, 0, 1, 0, 0, 1, 0, 0, 0, 1, 0, 0, 1, 0, 1]
            elif expInfo['counterbalance'] == '3':
                trialList = [0, 1, 0, 1, 0, 0, 0, 1, 0, 0, 1, 0, 0, 1, 0, 1]
    TextComponent instructionsTxt
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      text [set every repeat] = $"This is a practice block for " + str(n) + "-back trials. You will respond with the " +  str(key1) + " key whenever the current letter is the same as the one presented " + str(trialInstruct) + ". Otherwise, hit the " + str(key2) + " key. The letters will flash briefly on screen and you may respond even after the letter disappears during '+'. Press the 'spacebar' to begin the task."
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine fixation_2
    TextComponent fixation_start
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = +
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  Routine end_2
    TextComponent endMsg
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Break between blocks. The experiment will move on in a couple of seconds. 
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  Routine Experimental_Instructions_nback
    CodeComponent expSetTrials
      Code Type = Auto->JS
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      Begin Routine:
        # usually we would use a conditions file to specify the number of nBack trials
        # but we want to ensure the position of the first n-Back trial
        # adapts to the requested n. i.e. if this is a 4-back trial
        # we cannot present an n-Back trial in the first 3 trials

        # what is the n (e.g. n = 2 "remember if this item is the same as 2 back")
        n = N_test
        # how many trials in total?
        totalTrials = 18
        # how many n-Back trials?
        nBackTrials = 6

        # make a list of trials; 0 = not nBack; 1 = nBack trial
        trialList = [0]*(totalTrials-nBackTrials)+[1]*nBackTrials

        # buffer trials = first set of trials where an n-back trial cannot be presented
        bufferTrials = trialList[:n]

        # experimental trials - include nBack trials
        experimentalTrials = trialList[n:]

        # randomise the experimental trials
        shuffle(experimentalTrials)

        # combine the buffer trials and experimental trials to make the final trialList
        trialList = bufferTrials+experimentalTrials


        if n == 1:
            exp = '(e.g., b, B)'
        elif n == 2:
            exp = '(e.g., b, t, B)'
    TextComponent expInstructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $"This is an experimental block of the n-back task. Click the " + str(key1) + " key if the current letter is the same as " + str(n) + " prior to it. If it is not, hit the " + str(key2) + " key. The letters will flash briefly on screen and you may respond even after letter will disappear on the +. Click Space to begin the task."
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial_nback_2
    CodeComponent pickLetter
      Code Type = Both
      Begin Experiment:
        from random import choice
        import string
        import numpy as np

        lettersShown = []
        allLetters = ['B', 'C', 'D', 'G', 'P', 'T', 'F', 'N', 'L']
        trialCount = 0
      Begin JS Routine:
        thisTrialType = trialList[trialCount];
        thisNumber = "0";
        numberSet = allNumbers;

        if ((thisTrialType === 0)) {
            if ((numbersShown.length > n)) {
                remove(numberSet, numbersShown.slice((- n))[0]);
            }
            shuffle(numberSet);
            thisNumber = numberSet.slice((- 1))[0];
        } else {
            if ((thisTrialType === 1)) {
                thisNumber = numbersShown.slice((- n))[0];
            }
        }

        numbersShown.append(thisNumber);
        trials.addData("trialCount", trialCount);
        trials.addData("itemPresented", thisNumber);
        trials.addData("trialType", thisTrialType);
      Begin Routine:
        thisTrialType = trialList[trialCount]
        thisLetter = "0"
        letterSet = allLetters

        if thisTrialType == 0 :# not an n-back trial
            if trialCount > 1:
                availLetters = np.setdiff1d(letterSet,lettersShown[-n::])
                shuffle(availLetters)
                thisLetter = availLetters[-1]
            else:
                availLetters = letterSet
                shuffle(availLetters)
                thisLetter = availLetters[-1]
        elif thisTrialType ==1: # an n-back trial
            thisLetter = lettersShown[-n]

        lettersShown.append(thisLetter)
        trials.addData('trialCount', trialCount)
        trials.addData('itemPresented', thisLetter)
        trials.addData('trialType', thisTrialType)

        print(lettersShown)
        print(letterSet)
        print(trialList)
        print(availLetters)
        print(thisLetter)


        #correct trials
        if thisTrialType == 1:
            correct = 'right'
        else:
            correct = 'left'
      End JS Routine:
        trialCount += 1;
      End Routine:
        trialCount +=1
        if trialCount >= len(trialList):
            trialCount = 0
    TextComponent fixation
      letterHeight = 0.08
      startVal [time (s)] = .5
      stopVal [duration (s)] = 2
      text = +
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    TextComponent letter
      letterHeight = 0.08
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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      text [set every repeat]:
        $thisLetter.join(choice((str.upper, str.lower))(c) for c in thisLetter)
    KeyboardComponent key_resp_2
      allowedKeys = 'left','right'
      correctAns = $correct
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      storeCorrect = True
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  Routine Prac_Instructions_0back
    CodeComponent setTrials_0back
      Code Type = Auto->JS
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      Before Experiment:
        key1 = []
        key2 = []
      Begin Experiment:
        key1 = 'right arrow'
        key2 = 'left arrow'
        win.mouseVisible = False
      Begin Routine:
        # usually we would use a conditions file to specify the number of nBack trials
        # but we want to ensure the position of the first n-Back trial
        # adapts to the requested n. i.e. if this is a 4-back trial
        # we cannot present an n-Back trial in the first 3 trials

        # what is the n (e.g. n = 2 "remember if this item is the same as 2 back")
        n = 0
        # how many trials in total?
        totalTrials = 18
        # how many n-Back trials?
        nBackTrials = 6

        # make a list of trials; 0 = not nBack; 1 = nBack trial
        #trialList = [0]*(totalTrials-nBackTrials)+[1]*nBackTrials

        # buffer trials = first set of trials where an n-back trial cannot be presented
        #bufferTrials = trialList[:n]

        # experimental trials - include nBack trials
        #experimentalTrials = trialList[n:]

        # randomise the experimental trials
        #shuffle(experimentalTrials)

        # combine the buffer trials and experimental trials to make the final trialList
        #trialList = bufferTrials+experimentalTrials

        if expInfo['counterbalance'] == '1':
            trialList = [0, 0, 1, 0, 1, 0, 0, 1, 0, 1, 0, 0, 1, 0, 0, 0, 0, 1]
        elif expInfo['counterbalance'] == '2':
            trialList = [0, 0, 0, 0, 1, 0, 1, 0, 0, 0, 1, 0, 1, 0, 0, 1, 0, 1]
        elif expInfo['counterbalance'] == '3':
            trialList = [0, 0, 1, 0, 1, 0, 1, 0, 0, 0, 1, 0, 0, 0, 0, 1, 0, 1]
    TextComponent text_2
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      text = $"This is a practice block for 0 back.  Whenever you see the letter X hit the " + str(key1) + " key. Otherwise, hit the the " + str(key2) + " key. The letters will flash briefly on screen and you may respond even after the letter disappears during the '+'. Press the 'spacebar' to begin the task."
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial_0back
    CodeComponent pickLetter_0back
      Code Type = Auto->JS
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      Begin Experiment:
        from random import choice
        import string

        lettersShown = []
        allLetters = ['B', 'C', 'D', 'G', 'P', 'T', 'F', 'N', 'L']
        targetLetter = 'X'
        trialCount = 0
      Begin Routine:
        thisTrialType = trialList[trialCount]
        thisLetter = "0"
        letterSet = allLetters




        if thisTrialType == 0 : # not an n-back trial
            shuffle(letterSet)
            thisLetter = letterSet[-1]
        elif thisTrialType ==1: # an n-back trial
            thisLetter = targetLetter


        lettersShown.append(thisLetter)
        trials.addData('trialCount', trialCount)
        trials.addData('itemPresented', thisLetter)
        trials.addData('trialType', thisTrialType)


        if thisTrialType == 1:
            correct = 'right'
        else:
            correct = 'left'
      End Routine:
        trialCount +=1
        if trialCount >= len(trialList):
            trialCount = 0
    TextComponent fixation_3
      letterHeight = 0.08
      startVal [time (s)] = .5
      stopVal [duration (s)] = 2
      text = +
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    TextComponent letter_0back
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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      text [set every repeat]:
        $thisLetter.join(choice((str.upper, str.lower))(c) for c in thisLetter)
    KeyboardComponent key_resp_5
      allowedKeys = 'right', 'left'
      correctAns = $correct
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      storeCorrect = True
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  Routine Experiment_Instructions_0back
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        # usually we would use a conditions file to specify the number of nBack trials
        # but we want to ensure the position of the first n-Back trial
        # adapts to the requested n. i.e. if this is a 4-back trial
        # we cannot present an n-Back trial in the first 3 trials

        # what is the n (e.g. n = 2 "remember if this item is the same as 2 back")
        n = 0
        # how many trials in total?
        totalTrials = 18
        # how many n-Back trials?
        nBackTrials = 6

        # make a list of trials; 0 = not nBack; 1 = nBack trial
        trialList = [0]*(totalTrials-nBackTrials)+[1]*nBackTrials

        # buffer trials = first set of trials where an n-back trial cannot be presented
        bufferTrials = trialList[:n]

        # experimental trials - include nBack trials
        experimentalTrials = trialList[n:]

        # randomise the experimental trials
        shuffle(experimentalTrials)

        # combine the buffer trials and experimental trials to make the final trialList
        trialList = bufferTrials+experimentalTrials
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = $"This is an experimental block for 0-back trials.  Whenever you see the letter X hit the " + str(key1) + " key. Otherwise, hit the the " + str(key2) + " key. The letters will flash briefly on screen and you may respond even after letter will disappear on the +. Click Space to begin the task."
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    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine feedback_0back
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        pracRep0 = 1
      Begin Routine:
        nCorr = int(trials.data['key_resp_5.corr'].sum())
        msg = f"You got {nCorr}/18 trials correct. Press Space to continue."


        if nCorr >= (totalTrials * .75):
            trials_3.finished = True
        else:
            pracRep0 += 1
      End Experiment:
        trials.addData('pracRep0', pracRep0)
      End Routine:
        trials.addData("pracRep0", pracRep0)
    TextComponent text_4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $msg
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine feedback_nback
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Experiment:
        pracRepN1 = 1
        pracRepN2 = 1
      Begin Routine:
        nCorr1 = int(trials_8.data['key_resp_2.corr'].sum())
        msg = f"You got {nCorr1}/18 trial(s) correct. Press Space to continue."

        if nCorr1 >= (totalTrials * .75):
            trials_4.finished = True
        else:
            if n == 1:
                pracRepN1 += 1
            if n == 2:
                pracRepN2 += 1
      End Experiment:
        trials.addData("pracRepN1", pracRepN1);
        trials.addData("pracRepN2", pracRepN2);
    TextComponent text_5
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg
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    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine blank
  Routine Instruct1
    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_6
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      text = In this task you will see a sequence of letters one after the other. Your task is to respond to target and non-target letters in the sequence. There are three different types of trials (0-back, 1-back, 2-back) and each will have their own rules for determining targets. 
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  Routine Instruct2
    ImageComponent image
      image = Instructions/zeroBack.png
      interpolate = nearest
      size = (23, 13)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = degFlatPos
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    KeyboardComponent key_resp_10
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instruct3
    KeyboardComponent key_resp_11
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image_2
      image = Instructions/oneBack.png
      interpolate = nearest
      size = (23, 13)
      startVal [time (s)] = 0.0
      units = degFlatPos
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  Routine Instruct4
    ImageComponent image_3
      image = Instructions/twoBack.png
      interpolate = nearest
      size = (23, 13)
      startVal [time (s)] = 0.0
      units = degFlatPos
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    KeyboardComponent key_resp_12
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instruct5
    TextComponent text_8
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        For your reference, below is a list of letters that can be shown during the 1-back and 2-back trials:

        Upper case: B, C, D, F, G, L, N, P, T

        Lower case: b, c, d, f, g, l*, n, p, t

        *Note: The uppercase or lowercase letter "i" is never shown during the task. Please treat all instances of "l" as a lower case "L".

        Press ‘spacebar’ to continue.
    KeyboardComponent key_resp_14
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Instruct1
  Routine Instruct2
  Routine Instruct3
  Routine Instruct4
  Routine Instruct5
  LoopInitiator trials_3 loopType="TrialHandler"
    loopType = random
    nReps = 3
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    Routine Prac_Instructions_0back
    Routine fixation_2
    LoopInitiator trials loopType="TrialHandler"
      loopType = random
      nReps = totalTrials
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      Routine trial_0back
    LoopTerminator trials
    Routine feedback_0back
  LoopTerminator trials_3
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = prac_list.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('N_prac', 1)]),
      OrderedDict([('N_prac', 2)])]
    LoopInitiator trials_4 loopType="TrialHandler"
      loopType = random
      nReps = 3
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      Routine Prac_Instructions_nback
      Routine fixation_2
      LoopInitiator trials_8 loopType="TrialHandler"
        loopType = random
        nReps = totalTrials
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        Routine trial_nback_2
      LoopTerminator trials_8
      Routine feedback_nback
    LoopTerminator trials_4
    Routine blank
  LoopTerminator trials_2
  Routine endStudy
